CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/folders that you want to analyze.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module extracts site and channel information from the filenames']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Well": "text", "Site": "integer", "Channel": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>[A-Z]{2}[0-9]{2})_s(?P<Site>[0-9])_w(?P<Channel>[0-9]).png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Assigns names to the different channels']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:file does contain "_w1"
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w2"
    Name to assign these images:ConA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w3"
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w4"
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w5"
    Name to assign these images:WGA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w6"
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other.']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:Site

IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei from the DNA channel']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
    Select the input image:DNA
    Name the primary objects to be identified:PrimaryNuclei
    Typical diameter of objects, in pixel units (Min,Max):15,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify cell boundaries using the membrane and actin channels']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
    Select the input objects:PrimaryNuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:ConA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:7|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notes:['Create cytoplasm objects by subtracting nuclei from cells']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:PrimaryNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectSizeShape:[module_num:8|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notes:['Measure size and shape features of cells, nuclei, and cytoplasm']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
    Select object sets to measure:Cells, Cytoplasm, PrimaryNuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity features for all channels in all objects']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
    Select images to measure:DNA, ConA, Actin, RNA, WGA, Mito
    Select objects to measure:Cells, Cytoplasm, PrimaryNuclei

MeasureColocalization:[module_num:10|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notes:['Measure the correlation between channels']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
    Select images to measure:DNA, ConA, Actin, RNA, WGA, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, PrimaryNuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Fast

OverlayOutlines:[module_num:11|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notes:['Create a quality control image showing segmentation results']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:NucleiOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:PrimaryNuclei
    Select outline color:Yellow
    Select objects to display:Cells

ExportToSpreadsheet:[module_num:12|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notes:['Export all measurements']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Recursion_
    Overwrite existing files without warning?:No
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