CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['To begin creating your project, use the Images module to compile a list of files and/folders that you want to analyze.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['The Metadata module extracts site and channel information from the filenames']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Well": "text", "Site": "integer"}
    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^Plate(?P<Plate>[0-9]+)_(?P<Well>[A-Z]+[0-9]{2})_s(?P<Site>[0-9])_w(?P<WaveForm>[0-9]).png$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Channel assignment:', 'w1: Hoechst 33342 (nucleus)', 'w2: Concanavalin A (membrane glycoproteins)', 'w3: Phalloidin (Actin)', 'w4: Syto14 (RNA)', 'w5: WGA (Golgi)', 'w6: Mitotracker (mitochondria)']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:6
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:file does contain "_w1"
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w2"
    Name to assign these images:ConA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w3"
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w4"
    Name to assign these images:RNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w5"
    Name to assign these images:WGA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:file does contain "_w6"
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Group by Well and Site to process related images together']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:Site

IdentifyPrimaryObjects:[module_num:5|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notes:['Identify nuclei using Hoechst staining']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enabled:False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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.9
    Lower and upper bounds on threshold:0.002,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:6|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notes:['Identify cell boundaries using membrane staining']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enabled:False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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:ConA
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    Regularization factor:0.005
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.003,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:7|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notes:['Create cytoplasm objects by subtracting nuclei from cells']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enabled:False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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhance RNA spots to identify nucleoli']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enabled:False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
    Select the input image:RNA
    Name the output image:FilteredRNA
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:9|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notes:['Mask RNA signal to only look within nuclei']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enabled:False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
    Select the input image:FilteredRNA
    Name the output image:RNA_in_Nuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:10|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notes:['Identify nucleoli from masked RNA signal']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enabled:False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
    Select the input image:RNA_in_Nuclei
    Name the primary objects to be identified:Nucleoli
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
RelateObjects:[module_num:11|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notes:['Relate nucleoli to their parent nuclei']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enabled:False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
    Parent objects:Nuclei
    Child objects:Nucleoli
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:NucleoliChildObjects
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
EnhanceOrSuppressFeatures:[module_num:12|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notes:['Enhance Golgi spots in WGA channel']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enabled:False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
    Select the input image:WGA
    Name the output image:EnhancedGolgi
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
MaskImage:[module_num:13|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notes:['Mask WGA signal to only look within cytoplasm']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enabled:False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
    Select the input image:EnhancedGolgi
    Name the output image:Golgi_in_Cytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:14|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notes:['Identify Golgi spots from masked WGA signal']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enabled:False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
    Select the input image:Golgi_in_Cytoplasm
    Name the primary objects to be identified:GolgiSpots
    Typical diameter of objects, in pixel units (Min,Max):2,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:15|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notes:['Enhance mitochondrial structures']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enabled:False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
    Select the input image:Mito
    Name the output image:EnhancedMito
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Tubeness
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    Rescale result image:No

MaskImage:[module_num:16|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notes:['Mask mitochondrial signal to cytoplasm']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enabled:False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
    Select the input image:EnhancedMito
    Name the output image:Mito_in_Cytoplasm
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:17|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notes:['Identify mitochondrial structures']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enabled:False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
    Select the input image:Mito_in_Cytoplasm
    Name the primary objects to be identified:MitoObjects
    Typical diameter of objects, in pixel units (Min,Max):3,35
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
RelateObjects:[module_num:18|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notes:['Relate mitochondria to their parent cells']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enabled:False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
    Parent objects:Cells
    Child objects:MitoObjects
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:MitoChildObjects
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
MeasureObjectSizeShape:[module_num:19|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notes:['Measure size and shape features of all objects']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enabled:False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
    Select object sets to measure:Cells, Cytoplasm, Nuclei, Nucleoli, GolgiSpots, MitoObjects, NucleoliChildObjects, MitoChildObjects
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:20|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notes:['Measure detailed intensity features across all channels']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enabled:False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
    Select images to measure:DNA, ConA, Actin, RNA, WGA, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei, Nucleoli, GolgiSpots, NucleoliChildObjects

MeasureObjectNeighbors:[module_num:21|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notes:['Analyze spatial relationships between cells']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enabled:False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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:50
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:ObjectNeighborCount
    Name the output image:Default
    Select colormap:Yes
    Retain the image of objects colored by percent of touching pixels?:PercentTouching
    Name the output image:Default
    Select colormap:Oranges

MeasureColocalization:[module_num:22|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notes:['Measure correlation between all channels']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enabled:False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
    Select images to measure:DNA, ConA, Actin, RNA, WGA, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei, Nucleoli, NucleoliChildObjects
    Run all metrics?:Yes
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    Method for Costes thresholding:Fast

OverlayOutlines:[module_num:23|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notes:['Create quality control image showing all segmentation results']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enabled:False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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:SegmentationOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:Nuclei
    Select outline color:Yellow
    Select objects to display:Cells
    Select outline color:Green
    Select objects to display:Nucleoli
    Select outline color:Magenta
    Select objects to display:GolgiSpots
    Select outline color:Cyan
    Select objects to display:MitoObjects

SaveImages:[module_num:24|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notes:['Save the overlay images for quality control']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enabled:False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
    Select the type of image to save:Image
    Select the image to save:SegmentationOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|overlay_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:25|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notes:['Export ALL measurements including per-object data']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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|Plate_\\g<Plate>/Well_\\g<Well>/Site_\\g<Site>
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Recursion_6Ch_
    Overwrite existing files without warning?:No
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
CreateBatchFiles:[module_num:26|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
    Store batch files in default output folder?:Yes
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    Are the cluster computers running Windows?:No
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    Local root path:/mnt/data/egfr-images3/EGFR_KO_and_controls/EGFR_KO/gene-081_Plate1_gene-081_1_AE32
    Cluster root path:/Users/aru/mnt/data/egfr-images3/EGFR_KO_and_controls/EGFR_KO/gene-081_Plate1_gene-081_1_AE32
